<?xml version="1.0" encoding="UTF-8"?><batch mzmine_version="3.9.0">
    <batchstep method="io.github.mzmine.modules.io.import_rawdata_all.AllSpectralDataImportModule" parameter_version="1">
        <parameter name="File names">
            <file>Y:\Simone\Caltech_14748\mzML\QCmix_01.mzML</file>
            <file>Y:\Simone\Caltech_14748\mzML\363130465.mzML</file>
            <file>Y:\Simone\Caltech_14748\mzML\363130466.mzML</file>
            <file>Y:\Simone\Caltech_14748\mzML\363130467.mzML</file>
            <file>Y:\Simone\Caltech_14748\mzML\363130468.mzML</file>
            <file>Y:\Simone\Caltech_14748\mzML\363130469.mzML</file>
            <file>Y:\Simone\Caltech_14748\mzML\363130470.mzML</file>
            <file>Y:\Simone\Caltech_14748\mzML\363130471.mzML</file>
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        </parameter>
        <parameter name="Advanced import" selected="true">
            <parameter name="MS1 detector (Advanced)" selected="true" selected_item="Factor of lowest signal">
                <module name="Factor of lowest signal">
                    <parameter name="Noise factor">2.0</parameter>
                </module>
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            </parameter>
            <parameter name="MS2 detector (Advanced)" selected="true" selected_item="Factor of lowest signal">
                <module name="Factor of lowest signal">
                    <parameter name="Noise factor">1.1</parameter>
                </module>
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            </parameter>
            <parameter name="Denormalize fragment scans (traps)">false</parameter>
        </parameter>
        <parameter name="Spectral library files"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time">
                <min>0.2</min>
                <max>9.8</max>
            </parameter>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">2</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Mass detector" selected_item="Centroid">
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            <module name="Centroid">
                <parameter name="Noise level">50000.0</parameter>
                <parameter name="Detect isotope signals below noise level" selected="true">
                    <parameter name="Chemical elements">H,C,N,O,S,H,C,N,O,S,H,C,N,O,S,H,C,N,O,S</parameter>
                    <parameter name="m/z tolerance">
                        <absolutetolerance>0.0015</absolutetolerance>
                        <ppmtolerance>3.0</ppmtolerance>
                    </parameter>
                    <parameter name="Maximum charge of isotope m/z">3</parameter>
                </parameter>
            </module>
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        </parameter>
        <parameter name="Denormalize fragment scans (traps)">false</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time">
                <min>0.2</min>
                <max>9.8</max>
            </parameter>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS2, level = 2">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Mass detector" selected_item="Centroid">
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            <module name="Centroid">
                <parameter name="Noise level">1000.0</parameter>
                <parameter name="Detect isotope signals below noise level" selected="true">
                    <parameter name="Chemical elements">H,C,N,O,S,H,C,N,O,S,H,C,N,O,S,H,C,N,O,S</parameter>
                    <parameter name="m/z tolerance">
                        <absolutetolerance>0.0015</absolutetolerance>
                        <ppmtolerance>3.0</ppmtolerance>
                    </parameter>
                    <parameter name="Maximum charge of isotope m/z">3</parameter>
                </parameter>
            </module>
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        </parameter>
        <parameter name="Denormalize fragment scans (traps)">false</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_adapchromatogrambuilder.ModularADAPChromatogramBuilderModule" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time">
                <min>0.2</min>
                <max>9.8</max>
            </parameter>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Minimum consecutive scans">4</parameter>
        <parameter name="Minimum intensity for consecutive scans">50000.0</parameter>
        <parameter name="Minimum absolute height">100000.0</parameter>
        <parameter name="m/z tolerance (scan-to-scan)">
            <absolutetolerance>0.001</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">chroms</parameter>
        <parameter name="Allow single scan chromatograms"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_smoothing.SmoothingModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Smoothing algorithm" selected_item="Savitzky Golay">
            <module name="Savitzky Golay">
                <parameter name="Retention time smoothing" selected="false">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</parameter>
                <parameter name="Mobility smoothing" selected="false">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</parameter>
            </module>
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        </parameter>
        <parameter name="Original feature list">KEEP</parameter>
        <parameter name="Suffix">sm</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_chromatogramdeconvolution.minimumsearch.MinimumSearchFeatureResolverModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Suffix">r</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
        <parameter name="MS/MS scan pairing" selected="true">
            <parameter name="MS1 to MS2 precursor tolerance (m/z)">
                <absolutetolerance>0.01</absolutetolerance>
                <ppmtolerance>10.0</ppmtolerance>
            </parameter>
            <parameter name="Retention time filter" selected="Use feature edges" unit="MINUTES">0.2</parameter>
            <parameter name="Minimum relative feature height" selected="true">0.25</parameter>
            <parameter name="Minimum required signals" selected="true">1</parameter>
            <parameter name="Limit by ion mobility edges">false</parameter>
            <parameter name="Merge MS/MS spectra (TIMS)">false</parameter>
            <parameter name="Minimum signal intensity (absolute, TIMS)" selected="false">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</parameter>
            <parameter name="Minimum signal intensity (relative, TIMS)" selected="true">0.01</parameter>
        </parameter>
        <parameter name="Dimension">Retention time</parameter>
        <parameter name="Chromatographic threshold">0.85</parameter>
        <parameter name="Minimum search range RT/Mobility (absolute)">0.2</parameter>
        <parameter name="Minimum relative height">0.01</parameter>
        <parameter name="Minimum absolute height">100000.0</parameter>
        <parameter name="Min ratio of peak top/edge">1.7</parameter>
        <parameter name="Peak duration range (min/mobility)">
            <min>0.01</min>
            <max>1.5</max>
        </parameter>
        <parameter name="Minimum scans (data points)">4</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopegrouper.IsotopeGrouperModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">deiso</parameter>
        <parameter name="m/z tolerance (intra-sample)">
            <absolutetolerance>0.001</absolutetolerance>
            <ppmtolerance>3.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.05</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Monotonic shape">true</parameter>
        <parameter name="Maximum charge">2</parameter>
        <parameter name="Representative isotope">Most intense</parameter>
        <parameter name="Never remove feature with MS2">true</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopefinder.IsotopeFinderModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Chemical elements">H,C,N,O,S</parameter>
        <parameter name="m/z tolerance (feature-to-scan)">
            <absolutetolerance>0.001</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Maximum charge of isotope m/z">2</parameter>
        <parameter name="Search in scans">SINGLE MOST INTENSE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.align_join.JoinAlignerModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Feature list name">Aligned feature list</parameter>
        <parameter name="m/z tolerance (sample-to-sample)">
            <absolutetolerance>0.001</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Weight for m/z">3.0</parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.15</parameter>
        <parameter name="Weight for RT">1.0</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Mobility weight">1.0</parameter>
        <parameter name="Require same charge state">false</parameter>
        <parameter name="Require same ID">false</parameter>
        <parameter name="Compare isotope pattern" selected="false">
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        </parameter>
        <parameter name="Compare spectra similarity" selected="false">
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        </parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">13C</parameter>
        <parameter name="Minimum aligned features (samples)" selected="true">
            <abs>2</abs>
            <rel>0.0</rel>
        </parameter>
        <parameter name="Minimum features in an isotope pattern" selected="false">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</parameter>
        <parameter name="Validate 13C isotope pattern" selected="true">
            <parameter name="m/z tolerance">
                <absolutetolerance>0.0015</absolutetolerance>
                <ppmtolerance>3.0</ppmtolerance>
            </parameter>
            <parameter name="Max charge">2</parameter>
            <parameter name="Estimate minimum carbon">true</parameter>
            <parameter name="Remove if 13C">true</parameter>
            <parameter name="Exclude isotopes">O,O</parameter>
        </parameter>
        <parameter name="Remove redundant isotope rows">false</parameter>
        <parameter name="m/z" selected="false"/>
        <parameter name="Retention time" selected="false">
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        </parameter>
        <parameter name="features duration range" selected="false">
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        </parameter>
        <parameter name="Chromatographic FWHM" selected="false">
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        </parameter>
        <parameter name="Charge" selected="false">
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        </parameter>
        <parameter name="Kendrick mass defect" selected="false">
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        </parameter>
        <parameter name="Parameter">No parameters defined</parameter>
        <parameter name="Only identified?">false</parameter>
        <parameter name="Text in identity" selected="false"/>
        <parameter name="Text in comment" selected="false"/>
        <parameter name="Keep or remove rows">Keep rows that match all criteria</parameter>
        <parameter name="Feature with MS2 scan">false</parameter>
        <parameter name="Never remove feature with MS2">true</parameter>
        <parameter name="Reset the feature number ID">false</parameter>
        <parameter name="Mass defect" selected="false"/>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.gapfill_peakfinder.multithreaded.MultiThreadPeakFinderModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">gaps</parameter>
        <parameter name="Intensity tolerance">0.2</parameter>
        <parameter name="m/z tolerance (sample-to-sample)">
            <absolutetolerance>0.001</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.1</parameter>
        <parameter name="Minimum scans (data points)">2</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_duplicatefilter.DuplicateFilterModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">dup</parameter>
        <parameter name="Filter mode">NEW AVERAGE</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>8.0E-4</absolutetolerance>
            <ppmtolerance>1.5</ppmtolerance>
        </parameter>
        <parameter name="RT tolerance" unit="MINUTES">0.035</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Require same identification">false</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.group_metacorrelate.corrgrouping.CorrelateGroupingModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="RT tolerance" unit="MINUTES">0.1</parameter>
        <parameter name="Minimum feature height">1000.0</parameter>
        <parameter name="Intensity threshold for correlation">10000.0</parameter>
        <parameter name="Min samples filter">
            <parameter name="Min samples in all">
                <abs>2</abs>
                <rel>0.0</rel>
            </parameter>
            <parameter name="Min samples in group">
                <abs>0</abs>
                <rel>0.0</rel>
            </parameter>
            <parameter name="Min %-intensity overlap">0.5</parameter>
            <parameter name="Exclude gap-filled features">true</parameter>
        </parameter>
        <parameter name="Feature shape correlation" selected="true">
            <parameter name="Min data points">5</parameter>
            <parameter name="Min data points on edge">2</parameter>
            <parameter name="Measure">PEARSON</parameter>
            <parameter name="Min feature shape correlation">0.85</parameter>
            <parameter name="Min total correlation" selected="true">0.5</parameter>
        </parameter>
        <parameter name="Feature height correlation" selected="true">
            <parameter name="Minimum samples">3</parameter>
            <parameter name="Measure">PEARSON</parameter>
            <parameter name="Min correlation">0.7</parameter>
        </parameter>
        <parameter name="Suffix (or auto)" selected="false"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.id_ion_identity_networking.ionidnetworking.IonNetworkingModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="m/z tolerance (intra-sample)">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>3.0</ppmtolerance>
        </parameter>
        <parameter name="Check">ALL FEATURES</parameter>
        <parameter name="Min height">1000.0</parameter>
        <parameter name="Ion identity library">
            <parameter name="MS mode">POSITIVE</parameter>
            <parameter name="Maximum charge">2</parameter>
            <parameter name="Maximum molecules/cluster">2</parameter>
            <parameter name="Adducts">
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                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="38.963158" mol_formula="K" name="K" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="18.033823" mol_formula="NH4" name="NH4" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="2" mass_difference="39.96149382" mol_formula="Ca" name="Ca" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="2" mass_difference="55.93384" mol_formula="Fe" name="Fe" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="2" mass_difference="47.96953482" mol_formula="Mg" name="Mg" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="18.033823" mol_formula="NH4" name="NH4" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="38.963158" mol_formula="K" name="K" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="2" mass_difference="39.96149382" mol_formula="Ca" name="Ca" type="ADDUCT"/>
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="2" mass_difference="55.93384" mol_formula="Fe" name="Fe" type="ADDUCT"/>
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="2" mass_difference="47.96953482" mol_formula="Mg" name="Mg" type="ADDUCT"/>
                </adduct_type>
            </parameter>
        </parameter>
        <parameter name="Annotation refinement" selected="true">
            <parameter name="Minimum size" selected="true">2</parameter>
            <parameter name="Delete small networks without major ion">false</parameter>
            <parameter name="Delete smaller networks: Link threshold" selected="true">4</parameter>
            <parameter name="Delete networks without monomer">true</parameter>
            <parameter name="Delete rows witout ion id">false</parameter>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.id_ion_identity_networking.addionannotations.AddIonNetworkingModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="m/z tolerance (intra-sample)">
            <absolutetolerance>0.001</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Min height">1000.0</parameter>
        <parameter name="Annotation refinement" selected="true">
            <parameter name="Minimum size" selected="true">3</parameter>
            <parameter name="Delete small networks without major ion">false</parameter>
            <parameter name="Delete smaller networks: Link threshold" selected="true">5</parameter>
            <parameter name="Delete networks without monomer">true</parameter>
            <parameter name="Delete rows witout ion id">false</parameter>
        </parameter>
        <parameter name="Ion identity library">
            <parameter name="MS mode">POSITIVE</parameter>
            <parameter name="Maximum charge">2</parameter>
            <parameter name="Maximum molecules/cluster">2</parameter>
            <parameter name="Adducts">
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                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="38.963158" mol_formula="K" name="K" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="18.033823" mol_formula="NH4" name="NH4" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="2" mass_difference="39.96149382" mol_formula="Ca" name="Ca" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="2" mass_difference="55.93384" mol_formula="Fe" name="Fe" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="2" mass_difference="47.96953482" mol_formula="Mg" name="Mg" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="18.033823" mol_formula="NH4" name="NH4" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="38.963158" mol_formula="K" name="K" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="2" mass_difference="39.96149382" mol_formula="Ca" name="Ca" type="ADDUCT"/>
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="2" mass_difference="55.93384" mol_formula="Fe" name="Fe" type="ADDUCT"/>
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="2" mass_difference="47.96953482" mol_formula="Mg" name="Mg" type="ADDUCT"/>
                </adduct_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                </modification_type>
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                <modification_type selected="true">
                    <subpart charge="0" mass_difference="15.99491462" mol_formula="O" name="O" type="CLUSTER"/>
                </modification_type>
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                <modification_type selected="true">
                    <subpart charge="0" mass_difference="46.005479" mol_formula="CHOOH" name="HFA" type="CLUSTER"/>
                </modification_type>
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                <modification_type selected="true">
                    <subpart charge="0" mass_difference="32.026215" mol_formula="CH3OH" name="MeOH" type="CLUSTER"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="41.026549" mol_formula="CH3CN" name="ACN" type="CLUSTER"/>
                </modification_type>
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            </parameter>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.id_ion_identity_networking.checkmsms.IonNetworkMSMSCheckModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="m/z tolerance (MS2)">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>15.0</ppmtolerance>
        </parameter>
        <parameter name="Min height (in MS2)">100.0</parameter>
        <parameter name="Check for multimers">true</parameter>
        <parameter name="Check neutral losses (MS1-&gt;MS2)" selected="true">PRECURSOR</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_gnps.fbmn.GnpsFbmnExportAndSubmitModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>Y:\Simone\Caltech_14748\mzmine\gnps.mgf</current_file>
        </parameter>
        <parameter name="Merge MS/MS (experimental)" selected="false">
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        </parameter>
        <parameter name="Filter rows">MS2 OR ION IDENTITY</parameter>
        <parameter name="Feature intensity">Area</parameter>
        <parameter name="CSV export">SIMPLE</parameter>
        <parameter name="Submit to GNPS" selected="false">
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        </parameter>
        <parameter name="Open folder">true</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_sirius.SiriusExportModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>Y:\Simone\Caltech_14748\mzmine\sirius.mgf</current_file>
        </parameter>
        <parameter name="Merge MS/MS" selected="false">
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        </parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Only rows with annotation">false</parameter>
        <parameter name="Exclude multiple charge">false</parameter>
        <parameter name="Exclude multimers">false</parameter>
    </batchstep>
</batch>
